CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The Images module is used to compile a list of files or folders that we want to analyze, containing images acquired on the confocal microscope.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. We do not use this module in this analysis pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows to assign a meaningful name to each image by which other modules will refer to it. Here, since the pipeline is iterated for one image after the other, we name each new image being processed with the same name (czi) to facilitate the way to refer to the current image in subsequent modules. ']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:czi
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    Set intensity range from:Image metadata
    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.  We do not use this module in this analysis pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['The ColorToGray module is used here to split the different channels from the .czi files and assign a name to each of them. The channels are numbered by increasing wavelength.']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
    Select the input image:czi
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:psyn
    Channel number:2
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    Image name:lamp1
    Channel number:3
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    Image name:th
    Channel number:4
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    Image name:p62

MedianFilter:[module_num:6|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notes:['The MedianFilter module is used here to apply a filter to the TH channel in order to smooth the signal and facilitate further objects identification.']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
    Select the input image:th
    Name the output image:MedianFilter_nucleus
    Window:6

EnhanceOrSuppressFeatures:[module_num:7|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notes:['The EnhanceOrSuppressFeatures module applies an algorithm to the TH channel to enhance features that look like nuclei (i.e., dark holes), in order to facilitate their subsequent identification. ', 'The module uses morphological reconstruction (the rolling-ball algorithm) to identify dark holes between 30 and 160 pixels within brighter areas, or brighter ring shapes. ']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
    Select the input image:MedianFilter_nucleus
    Name the output image:EnhanceOrSuppressFeatures_nucleus
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:30,160
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
IdentifyPrimaryObjects:[module_num:8|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notes:['The IdentifyPrimaryObjects module is used here to identify the nuclei (from the previous image with enhanced nuclei in the TH channel) and create a new object named IdentifyPrimaryObjects_nucleus. ']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
    Select the input image:EnhanceOrSuppressFeatures_nucleus
    Name the primary objects to be identified:IdentifyPrimaryObjects_nucleus
    Typical diameter of objects, in pixel units (Min,Max):60,180
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:9|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notes:['The MeasureObjectSizeShape module is used here to measure some features of the IdentifyPrimaryObjects_nucleus objects. The goal is to measure their roundness and exclude objects that are not round enough to be considered as real nuclei. ']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
    Select object sets to measure:IdentifyPrimaryObjects_nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:10|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notes:['The FilterObjects module is used here to exclude objects whose form factor is smaller than 0.3, a visually set roundness threshold. ', 'The form factor equals 1 for a perfectly circular object. ']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
    Select the objects to filter:IdentifyPrimaryObjects_nucleus
    Name the output objects:FilterObjects_nucleus
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

DilateObjects:[module_num:11|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notes:['The DilateObjects module is used here to dilate the filtered nuclei objects to artificially increase their size. The goal is to make them touch the TH positive cytoplasm objects, which we are identifying in the next module, so that we can subsequently say which cytoplasm object is related to which nucleus object (see the RelateObjects module, in step 18). ']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
    Select the input object:FilterObjects_nucleus
    Name the output object:DilateObjects_Filter_nucleus
    Structuring element:disk,15

IdentifySecondaryObjects:[module_num:12|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notes:['The IdentifySecondaryObjects module identifies objects (e.g., cell bodies) using objects identified by the IdentifyPrimaryObjects module (e.g., nuclei) as a starting point.']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
    Select the input objects:FilterObjects_nucleus
    Name the objects to be identified:IdentifySecondaryObjects_cell_body
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:MedianFilter_nucleus
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:13|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notes:['The IdentifyTertiaryObjects module identifies tertiary objects (e.g., cytoplasm) by removing smaller primary objects (e.g., nuclei) from larger secondary objects (e.g., cell bodies), leaving a ring shape. ']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
    Select the larger identified objects:IdentifySecondaryObjects_cell_body
    Select the smaller identified objects:FilterObjects_nucleus
    Name the tertiary objects to be identified:IdentifyTertiaryObjects_cytoplasm
    Shrink smaller object prior to subtraction?:No

SplitOrMergeObjects:[module_num:14|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notes:['The SplitOrMergeObjects module is used here to separate the cytoplasm objects into fragments, if they are composed of distinct, non-touching TH positive regions. Indeed, the IdentifySecondaryObject module sometimes considers as cell bodies areas where a round, dark hole that is not a nucleus touches a neurite or other TH positive region. These segmentation errors are excluded from the analysis in the following modules, by filtering out small cytoplasm objects, as false positives are usually thin, TH positive neurites. But before doing that, the cytoplasm objects that are composed of distinct, non-touching TH positive regions must be split into fragments, so as to measure and filter out isolated TH fragments, not the grouped cytoplasm object that may artifically link neighboring neurites. ']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
    Select the input objects:IdentifyTertiaryObjects_cytoplasm
    Name the new objects:SplitOrMergeObjects_cytoplasm
    Operation:Split
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
MeasureObjectSizeShape:[module_num:15|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notes:['The MeasureObjectSizeShape module measures several area and shape features of the identified split cytoplasm objects created in the previous step. ']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
    Select object sets to measure:SplitOrMergeObjects_cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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notes:['The FilterObjects module eliminates cytoplasm objects based on their minimum feret diameter. The feret diameter is the distance between two parallel lines tangent on either side of the object (imagine taking a caliper and measuring the object at various angles). The minimum feret diameters is the smallest possible diameter, rotating the calipers along all possible angles. Any cytoplasm object whose minimum feret diameter is below a visually set threshold (70 pixels) is discarded from the analysis, as this was observed to be optimal to exclude segmentation errors but keep actual cell bodies.']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
    Select the objects to filter:SplitOrMergeObjects_cytoplasm
    Name the output objects:FilterObjects_Split_cytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MinFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:70
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:17|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notes:['The split cytoplasm objects cannot be considered as the actual cell bodies, as the SplitOrMergeObjects module may have also split into different objects actual cytoplasm objects, if the cytoplasm was segmented somewhat discontinuously. To circumvent this problem, the MaskObjects module is used here to remove cytoplasm objects (from the IdentifyTertiaryObjects module, see step 12) that do not overlap the split-and-filtered cytoplasm objects, which correspond to actual cell bodies. All the small, neuritic false positives are discarded in this step. ']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
    Select objects to be masked:IdentifyTertiaryObjects_cytoplasm
    Name the masked objects:MaskObjects_IdentifyTertiary_cytoplasm
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:FilterObjects_Split_cytoplasm
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:18|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notes:['The RelateObjects module is used here to assign a relationship between nuclei and cytoplasm objects: a cytoplasm object touching a dilated nucleus object becomes its child. This step ensures that touching cell bodies are considered as different cell bodies in the rest of the analysis. This relationship already exists at the exit of the IdentifyTertiaryObjects module, which defines cytoplasm as (nucleus minus touching cell body), but it is lost with the MaskObjects step, so we re-establish it here. The RelateObjects_cell_body object is created: it is used as the parent object of sub-cellular objects that we identify in the rest of the pipeline.']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
    Parent objects:DilateObjects_Filter_nucleus
    Child objects:MaskObjects_IdentifyTertiary_cytoplasm
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_cell_body
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
EnhanceOrSuppressFeatures:[module_num:19|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notes:['Moving on to the LAMP1 segmentation, the EnhanceOrSuppressFeatures module is used here to enhance LAMP1 positive speckles around 20 pixels in size, to improve subsequent identification of LAMP1 puncta.', '']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
    Select the input image:lamp1
    Name the output image:EnhanceOrSuppressFeatures_lamp1
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Opening:[module_num:20|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notes:['The Opening module is used here to perform a morphological transformation on the LAMP1 channel, again to improve subsequent identification of LAMP1 puncta. An opening a morphological transformation corresponding to the dilation of the erosion of an image. It is used to remove salt noise (small bright spots that are in the vast majority of cases, not lysosomes) and connect small dark cracks together. ']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
    Select the input image:EnhanceOrSuppressFeatures_lamp1
    Name the output image:Opening_lamp1
    Structuring element:Disk,1

IdentifyPrimaryObjects:[module_num:21|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notes:['The IdentifyPrimaryObjects module is used here to identify LAMP1 puncta (from the previous image with enhanced and opened LAMP1 signal in the LAMP1 channel) and create a new object named IdentifyPrimaryObjects_lamp1.  ']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
    Select the input image:Opening_lamp1
    Name the primary objects to be identified:IdentifyPrimaryObjects_lamp1
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Minimum Cross-Entropy

RelateObjects:[module_num:22|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notes:['The RelateObjects module is used here to link the identified LAMP1 puncta to the identifed cell bodies, and create a new object: RelateObjects_lamp1. The goal is to be able to say which LAMP1 object (child object) belongs to which cell body object (parent object). We discard LAMP1 objects that do not belong to a cell body. ']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
    Parent objects:RelateObjects_cell_body
    Child objects:IdentifyPrimaryObjects_lamp1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_lamp1
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
MedianFilter:[module_num:23|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notes:['Moving on to the p62 segmentation, the MedianFilter is used here to reduce salt-and-pepper noise in the p62 channel while preserving borders in the signal, to improve subsequent identification of p62 positive objects.']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
    Select the input image:p62
    Name the output image:MedianFilter_p62
    Window:3

IdentifyPrimaryObjects:[module_num:24|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notes:['The IdentifyPrimaryObjects module is used here to identify the p62 positive objects (from the previous image with median filtered p62 signal in the p62 channel) and create a new object named IdentifyPrimaryObjects_p62. ']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
    Select the input image:MedianFilter_p62
    Name the primary objects to be identified:IdentifyPrimaryObjects_p62
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:4
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
MaskObjects:[module_num:25|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notes:['Our mutant strain presents large p62 spheroids located in neurites, which may touch cell bodies without being included in them. The MaskObjects module is used here to remove p62 positive objects whose overlap with a cell body object is less than 50%, which excludes these non-somatic p62 spheroids.']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
    Select objects to be masked:IdentifyPrimaryObjects_p62
    Name the masked objects:MaskObjects_IdentifyPrimary_p62
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:IdentifySecondaryObjects_cell_body
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:26|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notes:['The RelateObjects module is used here to link the identified p62 positive objects to the identifed cell bodies, and create a new object: RelateObjects_p62. The goal is to be able to say which p62 object (child object) belongs to which cell body object (parent object). We discard p62 objects that do not belong to a cell body. ']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
    Parent objects:RelateObjects_cell_body
    Child objects:MaskObjects_IdentifyPrimary_p62
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_p62
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
IdentifyPrimaryObjects:[module_num:27|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notes:['The IdentifyPrimaryObjects module is used here to identify the pSyn positive aggregates and create a new object named IdentifyPrimaryObjects_psyn (without any prior median filter or enhancement to the pSyn channel, as these were observed to worsen the segmentation, with our particular imaging parameters).']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
    Select the input image:psyn
    Name the primary objects to be identified:IdentifyPrimaryObjects_psyn
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectIntensity:[module_num:28|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notes:['The MeasureObjectIntensity is used here to measure several intensity features for the pSyn signal. Indeed, the pSyn antibody we used presented some non-specific staining of cellular pigments such as lipofuscine, but these were not as bright as actual pSyn aggregates. We use this measurement to filter out pSyn-stained lipofuscine puncta in the following step. ']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
    Select images to measure:psyn
    Select objects to measure:IdentifyPrimaryObjects_psyn

FilterObjects:[module_num:29|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notes:['The FilterObjects module is used here to eliminate pSyn positive objects whose maximal intensity is below a visually set threshold. The threshold was chosen so as to exclude the most pSyn-stained lipofuscine puncta, while keeping the most legitimate pSyn aggregates, throughout the depth of the tissue. ']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
    Select the objects to filter:IdentifyPrimaryObjects_psyn
    Name the output objects:FilterObjects_IdentifyPrimary_psyn
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_psyn
    Filter using a minimum measurement value?:Yes
    Minimum value:0.027
    Filter using a maximum measurement value?:Yes
    Maximum value:1

MaskObjects:[module_num:30|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notes:['The MaskObjects module is used here to keep only the portion of pSyn aggregates that lies within a cytoplasmic region: the portion of pSyn aggregates that might superimpose with a nucleus (which can happen, as pSyn aggregates seem to be often wrapped around the nucleus and the optical section on our confocal microscope was not infinitely small) is discarded in this step. ']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
    Select objects to be masked:FilterObjects_IdentifyPrimary_psyn
    Name the masked objects:MaskObjects_Filter_IdentifyPrimary_psyn
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:FilterObjects_nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

RelateObjects:[module_num:31|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notes:['The RelateObjects module is used here to link the identified pSyn positive objects to the identifed cell bodies, and create a new object: RelateObjects_psyn. The goal is to be able to say which psyn object (child object) belongs to which cell body object (parent objects). We discard psyn objects that do not belong to a cell body. ']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
    Parent objects:RelateObjects_cell_body
    Child objects:MaskObjects_Filter_IdentifyPrimary_psyn
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_psyn
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
SplitOrMergeObjects:[module_num:32|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notes:['The SplitOrMergeObjects module is used here to create a new object consisting of convex hulls that enclose pSyn aggregates comprised within a cell body: RelabeledNuclei_psyn. A convex hull is the smallest convex polygon that encloses an object, here a pSyn aggregate. The goal here is to delineate a compartment within the vicinity of a given pSyn aggregate, that is not stricly limited to the aggregate itself, which will be used for subsequent colocalization analysis with LAMP1 and p62 objects.']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
    Select the input objects:RelateObjects_psyn
    Name the new objects:ConvexHull_psyn
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:MaskObjects_Filter_IdentifyPrimary_psyn
    Output object type:Convex hull

RelateObjects:[module_num:33|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notes:['The RelateObjects module is used here to link the identified LAMP1 objects to the identifed pSyn convex hulls, and create a new object: RelateObjects_psyn_lamp1. The goal is to be able to say which LAMP1 object (child object) belongs to which pSyn convex hull (parent object). If a LAMP1 object is outside of a pSyn convex hull, it is not included in the new RelateObjects_psyn_lamp1 object. ']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
    Parent objects:ConvexHull_psyn
    Child objects:RelateObjects_lamp1
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_psyn_lamp1
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
RelateObjects:[module_num:34|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notes:['The RelateObjects module is used here to link the identified p62 objects to the identifed pSyn convex hulls, and create a new object: RelateObjects_psyn_p62. The goal is to be able to say which p62 object (child object) belongs to which pSyn convex hull (parent object). If a p62 object is outside of a pSyn convex hull, it is not included in the new RelateObjects_psyn_p62 object. ']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
    Parent objects:ConvexHull_psyn
    Child objects:RelateObjects_p62
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects_psyn_p62
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
MeasureObjectSizeShape:[module_num:35|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notes:['The MeasureObjectSizeShape is used here to measure several features of all the relevant RelateObjects that were identified in this analysis pipeline, in order to have several metrics (area, shape, etc) available for later processing. ']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
    Select object sets to measure:ConvexHull_psyn, RelateObjects_cell_body, RelateObjects_lamp1, RelateObjects_p62, RelateObjects_psyn, RelateObjects_psyn_lamp1, RelateObjects_psyn_p62
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageQuality:[module_num:36|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notes:['The MeasureImageQuality module is used here to measure the quality of the signal in the pSyn channel. This could be used, if believed necessary, to exclude images with a pSyn signal too poor (the signal to noise ratio being quite high when imaging in the depth of the tissue) to properly segment pSyn aggregates. We ended up being satisfied with the pSyn segmentation for all images, and not using this measurement. ']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:psyn
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:37|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notes:['The ExportToSpreadsheet module exports measurements into several files (one per object measured in the MeasureObjectSizeShape module, see step 34) that can be opened in Excel and exported to R. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|C:\\Users\\phar0771\\Desktop\\output_ca
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DilateObjects_Filter_nucleus|Children_MaskObjects_IdentifyTertiary_cytoplasm_Count,DilateObjects_Filter_nucleus|Location_Center_Z,DilateObjects_Filter_nucleus|Location_Center_Y,DilateObjects_Filter_nucleus|Location_Center_X,DilateObjects_Filter_nucleus|Number_Object_Number,DilateObjects_Filter_nucleus|Parent_FilterObjects_nucleus,RelateObjects_lamp1|AreaShape_Solidity,RelateObjects_lamp1|AreaShape_Center_X,RelateObjects_lamp1|AreaShape_Center_Y,RelateObjects_lamp1|AreaShape_MeanRadius,RelateObjects_lamp1|AreaShape_Orientation,RelateObjects_lamp1|AreaShape_Extent,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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